PsychoPy2experiment version="2021.2.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': 'Test'}
  Full-screen window = True
  Monitor = CBIC-UHD4K
  Save hdf5 file = True
  Screen = 2
  Units = cm
  Use version = 2021.2.3
  Window size (pixels) = [1280, 720]
  color = black
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 LONG RANGE
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 500
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = MovieWithEyetracking
  eyetracker = SR Research Ltd
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Routines
  Routine et_instructions
    TextComponent text
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      wrapWidth = 50
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      text:
        EYE TRACKER SETUP

        Please stare at the moving dots when they appear

        PRESS BUTTON 1 TO CONTINUE
    KeyboardComponent et_continue
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine play_movie
    EyetrackerRecordComponent et_record
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    MovieComponent movie_player
      backend = moviepy
      durationEstim = 1200
      forceEndRoutine = True
      movie = $mp4_fname
      size = [56.8, 32.0]
      startVal [time (s)] = 0.0
      units = cm
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    CodeComponent select_movie
      Code Type = Py
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      Before Experiment:
        # Movie file selector
        mp4_fname = gui.fileOpenDlg(prompt='Select Movie', allowed='*.mp4')[0]

        if mp4_fname:
            print(f'Selected {mp4_fname}')
        else:
            print('User cancelled - exiting')
            core.quit()
  Routine post_movie
    TextComponent thanks_text
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thanks for watching!
      wrapWidth = 50
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  Routine sound_check
    MovieComponent movie_check
      backend = moviepy
      durationEstim = 30
      forceEndRoutine = True
      movie = $mp4_fname.replace('.mp4', '_soundcheck.mp4')
      size = [56.8, 32.0]
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent adjust
      allowedKeys = '1', '2', '4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent adjvol
      Code Type = Py
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      Begin Routine:
        last_rt = -1.0
      Each Frame:
        if adjust.rt:

            this_rt = adjust.rt

            if this_rt - last_rt > 0.1:

                if adjust.keys == '1':
                    print('LOUDER')
                    sys.stdout.flush()

                if adjust.keys == '2':
                    print('QUIETER')
                    sys.stdout.flush()

                if adjust.keys == '4':
                    continueRoutine = False

            last_rt = this_rt
  Routine sound_check_instr
    TextComponent sound_check_text
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      wrapWidth = 50
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      text:
        SOUND LEVEL CHECK

        Press 1 for louder
        Press 2 for quieter
        Press 4 to accept

        CLOSE YOUR EYES then PRESS BUTTON 1
    KeyboardComponent sound_check_inst_text
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trigger_wait
    KeyboardComponent trigger_detect
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent trigger_wait_text
      letterHeight = 2.0
      startVal [time (s)] = 0.0
      text = Waiting for scanner ...
      wrapWidth = 40
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  Routine play_movie_instr
    TextComponent play_movie_instr_text
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      wrapWidth = 50
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      text:
        The sound check is complete!

        The movie will start shortly.

        Waiting for operator ...
    KeyboardComponent play_movie_trigger
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 1
    colorSpace = rgb
    expandDur = 1
    expandScale = 1
    innerBorderColor = black
    innerBorderWidth = 1
    innerFillColor = green
    innerRadius = 0.2
    movementAnimation = False
    movementDur = 1.0
    outerRadius = 0.5
    progressMode = time
    randomisePos = True
    targetDelay = 0.5
    targetDur = 1
    targetLayout = NINE_POINTS
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 1
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 0.1
    innerBorderColor = black
    innerBorderWidth = 1
    innerFillColor = green
    innerRadius = 0.21
    movementAnimation = False
    movementDur = 1.0
    outerRadius = 0.5
    progressMode = time
    randomisePos = True
    saveAsImg = True
    showResults = True
    targetDelay = 0.5
    targetDur = 1
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    units = from exp settings
Flow
  Routine et_instructions
  EyetrackerCalibrationRoutine calibration
  EyetrackerValidationRoutine validation
  Routine sound_check_instr
  Routine trigger_wait
  Routine sound_check
  Routine play_movie_instr
  Routine trigger_wait
  Routine play_movie
  Routine post_movie
